PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  Show info dlg = False
  expName = expDell
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent green
      fillColor = $[0,1,0]
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.8)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = on click
    PolygonComponent red
      fillColor = $[1,0,0]
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 1)
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  Routine correctFeed
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator bigLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine correctFeed
  LoopTerminator bigLoop
